PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = monitorNote
  Screen = 1
  Units = height
  Use version = 2026.1.1
  Window size (pixels) = (2560, 1440)
  expName = graz_protocol_3classes
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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  Routine start_lsl
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    CodeComponent start_lsl_markers
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet, local_clock

        # =========================
        # 1. Criar stream de marcadores LSL
        # =========================
        info = StreamInfo(
            name='GrazMarkers',         # nome do stream
            type='Markers',             # tipo
            channel_count=1,            # 1 canal = 1 inteiro por evento
            nominal_srate=0,            # irregular/event-based
            channel_format='int32',     # inteiro
            source_id='graz_markers_v1' # identificador único
        )

        outlet = StreamOutlet(info)

        # =========================
        # 2. Triggers fixos das fases
        # =========================
        PHASE_TRIGGERS = {
            'FIXATION_START': 100,
            'FIXATION_END': 101,
            'CUE_END': 201,
            'ATTEMPT_START': 300,
            'ATTEMPT_END': 301,
            'REST_START': 400,
            'REST_END': 401,
        }

        # =========================
        # 3. Função para enviar trigger no flip da tela
        # =========================
        def send_trigger(code, label=''):
            """
            Envia um trigger inteiro via LSL sincronizado com o próximo flip da tela.
            Também salva no arquivo de dados do PsychoPy.
            """
            def _do():
                t_lsl = local_clock()
                outlet.push_sample([int(code)], timestamp=t_lsl)

                # salvar também no csv do PsychoPy
                thisExp.addData('lsl_code', int(code))
                thisExp.addData('lsl_label', str(label))
                thisExp.addData('lsl_time', t_lsl)

            win.callOnFlip(_do)
  Routine rest
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    TextComponent DESCANSAR
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = DESCANSAR
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    CodeComponent rest_marker
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(PHASE_TRIGGERS['REST_START'], 'REST_START')
      End Routine:
        send_trigger(PHASE_TRIGGERS['REST_END'], 'REST_END')
  Routine fixation
    RoutineSettingsComponent fixation
      stopVal [duration (s)] = 3
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    TextComponent ATENCAO
      color = $(1.0000, -0.3255, -0.2706)
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = ATENÇÃO
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    PolygonComponent polygon
      fillColor = $(0.7412, 0.0000, 0.0000)
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent fixation_marker
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(PHASE_TRIGGERS['FIXATION_START'], 'FIXATION_START')
      End Routine:
        send_trigger(PHASE_TRIGGERS['FIXATION_END'], 'FIXATION_END')
  Routine cue
    RoutineSettingsComponent cue
      stopVal [duration (s)] = 2.5
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    ImageComponent estimulo
      image [set every repeat] = $stim_path
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    CodeComponent cue_marker
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(int(trigger), event_label)
      End Routine:
        send_trigger(PHASE_TRIGGERS['CUE_END'], 'CUE_END')
  Routine end_trial
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        O esperimento acabou!

        Obrigado pela ajuda!
  Routine attempt
    RoutineSettingsComponent attempt
      stopVal [duration (s)] = 5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = EXECUTE O MOVIMENTO
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    CodeComponent attempt_marker
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(PHASE_TRIGGERS['ATTEMPT_START'], 'ATTEMPT_START')
      End Routine:
        send_trigger(PHASE_TRIGGERS['ATTEMPT_END'], 'ATTEMPT_END')
Flow
  Routine start_lsl
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = classes.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('id_classe', np.int64(0)), ('descricao', 'relaxado'), ('stim_path', 'images\\classe_0_relaxado.png'), ('event_label', 'STIM_RELAX_0'), ('trigger', np.int64(10))]),
      OrderedDict([('id_classe', np.int64(1)), ('descricao', 'direita30'), ('stim_path', 'images\\classe_1_direita30.png'), ('event_label', 'STIM_D30_1'), ('trigger', np.int64(11))]),
      OrderedDict([('id_classe', np.int64(2)), ('descricao', 'direita45'), ('stim_path', 'images\\classe_2_direita45.png'), ('event_label', 'STIM_D45_2'), ('trigger', np.int64(12))]),
      OrderedDict([('id_classe', np.int64(3)), ('descricao', 'direita60'), ('stim_path', 'images\\classe_3_direita60.png'), ('event_label', 'STIM_D60_3'), ('trigger', np.int64(13))]),
      OrderedDict([('id_classe', np.int64(4)), ('descricao', 'direita90'), ('stim_path', 'images\\classe_4_direita90.png'), ('event_label', 'STIM_D90_4'), ('trigger', np.int64(14))])]
    Routine fixation
    Routine cue
    Routine attempt
    Routine rest
  LoopTerminator trials
  Routine end_trial
